PsychoPy2experiment version="2026.2.3"
Settings
  Audio lib = ptb
  Data filename = os.path.join(session_folder, '%s_%s_%s' % (expInfo['participant'], expName, expInfo['date']))
  Enable Escape = False
  Experiment info = {'participant': '', 'session': '01', 'dummy_vpixx': False}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  color = [-1, -1, -1]
  expName = ChoiceRT_Combined
  frameRate = 120
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine eyelinkSetup
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    CodeComponent elConfig
      Code Type = Py
      Begin Routine:
        # --- EyeLink 1000 Plus, Remote Mode, 500 Hz (MEG lab) ---
        # The Initialize component (below) has already connected to the Host PC.
        # Remote mode itself (camera mount / "Desktop - Remote" configuration and the
        # forehead target sticker) is selected on the Host PC Set Options screen.
        el_tracker = pylink.getEYELINK()
        if not dummy_mode:
            el_tracker.setOfflineMode()
            # sampling rate: Remote mode on the 1000 Plus runs at up to 500 Hz
            el_tracker.sendCommand("sample_rate 500")
            # Uncomment to force the camera configuration from the script instead of
            # the Host PC (RTABLER = desktop mount, remote, monocular)
            # el_tracker.sendCommand("elcl_select_configuration = RTABLER")
            el_tracker.sendMessage("SESSION_CONFIG remote_mode sample_rate_500")
    TextComponent elInstructions
      letterHeight = 36
      startVal [time (s)] = 0
      units = pix
      wrapWidth = 1500
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      text:
        Eye tracker setup

        Please keep your head still and look at the screen.

        We will now calibrate the eye tracker: follow the dot with your eyes and look at its centre until it moves.

        (Experimenter: press SPACE to enter Camera Setup.
        Enter = camera image, C = calibrate, V = validate, O = continue to the task.)
    KeyboardComponent key_setup
      allowedKeys = "space"
      forceEndRoutine = True
      startVal [time (s)] = 0
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    InitializeConnection Initialize plugin="psychopy-eyelink"
      disableEyeLinkAudio = False
      dummyMode = False
      hostAddress = 100.1.1.1
      screenUnitType = pix
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      useCustomHostIP = False
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    CameraSetup CameraSetup plugin="psychopy-eyelink"
      backgroundColor = win.color
      calibrationFilenames = 'qbeep.wav','type.wav','error.wav'
      calibrationSounds = defaults
      calibrationType = HV13
      foregroundColor = (1,1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetFilename = images/fixTarget.bmp
      targetSize = 24
      targetType = picture
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  Routine instruct
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    CodeComponent vpixx
      Code Type = Py
      Before Experiment:
        # =====================================================================
        # VPixx DATAPixx3 (MEG lab): Pixel Mode B triggers + audio scheduler
        # ---------------------------------------------------------------------
        # TRIGGERS: a 1x1 px patch in the upper-left corner carries the trigger
        # value in its BLUE channel (red = green = 0). At each vsync the DATAPixx3
        # reads that pixel and puts the value on its digital output -> MEG trigger
        # channel. 8 lines available: 1, 2, 4, 8, 16, 32, 64, 128.
        # Colours are written literally as (R, G, B) in 0-255 (patch is 'rgb255').
        #   TRIG_FIXATION   (0, 0, 1)   fixation cross onset (every trial)
        #   TRIG_TONE_L     (0, 0, 2)   tone onset, LEFT ear
        #   TRIG_TONE_R     (0, 0, 4)   tone onset, RIGHT ear
        #   TRIG_RESET      (0, 0, 0)   black = all trigger lines low
        #   spare blue values: 8, 16, 32, 64, 128
        # Each onset trigger is held for TRIG_HOLD_FRAMES frames, then the pixel
        # goes back to black.
        #
        # Pixel Mode is switched ON at the start of the first trial (after the
        # EyeLink drift check) and OFF on the thanks screen, so EyeLink
        # calibration / drift-check graphics never reach the trigger lines.
        #
        # AUDIO: one tone is written once into DATAPixx3 RAM and replayed every
        # trial by the audio scheduler; lrMode 'left' / 'right' sends the (mono)
        # buffer to that ear only. Playback is armed just before a flip and pushed
        # to the device at that flip's vsync, so tone onset, the tone trigger and
        # the start of Builder's response clock all share the same flip.
        # =====================================================================
        import atexit
        import numpy as np

        # ---- trigger codes ----
        TRIG_FIXATION = (0, 0, 1)
        TRIG_TONE_L = (0, 0, 2)
        TRIG_TONE_R = (0, 0, 4)
        TRIG_RESET = (0, 0, 0)
        TRIG_HOLD_FRAMES = 1   # 1 frame = 8.33 ms at 120 Hz (~10 samples at 1200 Hz)

        # ---- tone ----
        TONE_FREQ          = 1000      # Hz
        TONE_DURATION      = 0.100     # s
        RAMP_DURATION      = 0.010     # s, cosine on/off ramps (no clicks)
        AUDIO_SAMPLE_RATE  = 48000     # Hz, DATAPixx3 audio codec
        AUDIO_AMPLITUDE    = 0.8       # 0-1, scaled to int16
        TONE_BUFFER_ADDR   = int(16e6) # DATAPixx3 RAM address (VPixx default)
        VPIXX_AUDIO_VOLUME = 0.5       # codec volume 0-1 (codec opens at 0 = silent!)

        # pypixxlib is imported here; if it is missing the experiment falls back
        # to dummy mode (no triggers, PsychoPy sound, *.vp columns empty).
        try:
            from pypixxlib import _libdpx as _real_dp
            HAS_PYPIXXLIB = True
        except ImportError:
            _real_dp = None
            HAS_PYPIXXLIB = False


        class _MockDPx:
            """No-op stand-in for pypixxlib._libdpx (dummy mode)."""
            def __getattr__(self, name):
                if name == 'DPxGetTime':
                    return lambda: 0.0
                return lambda *a, **k: None


        def make_tone_int16(freq, dur, rate, ramp, amp):
            n = int(round(dur * rate))
            n_ramp = int(round(ramp * rate))
            t = np.arange(n) / rate
            tone = np.sin(2.0 * np.pi * freq * t)
            up = 0.5 * (1.0 - np.cos(np.pi * np.arange(n_ramp) / n_ramp))
            tone[:n_ramp] *= up
            tone[-n_ramp:] *= up[::-1]
            return (np.clip(tone * amp, -1.0, 1.0) * 32767.0).astype(np.int16)


        toneWave = make_tone_int16(TONE_FREQ, TONE_DURATION, AUDIO_SAMPLE_RATE,
                                   RAMP_DURATION, AUDIO_AMPLITUDE)
        toneSamples = int(len(toneWave))
      Begin Experiment:
        # NOTE: Builder runs this tab INSIDE run(), where win, thisExp and expInfo
        # live, so the VPixx helpers are defined here rather than Before Experiment.

        # ---- connect to the DATAPixx3 (or fall back to dummy mode) ----
        DUMMY_VPIXX = str(expInfo.get('dummy_vpixx', False)).lower() in ('true', '1', 'yes')
        if not HAS_PYPIXXLIB and not DUMMY_VPIXX:
            logging.warning('pypixxlib not installed: forcing dummy VPixx mode '
                            '(NO TRIGGERS, PsychoPy sound NOT vsync-locked)')
            DUMMY_VPIXX = True
        thisExp.addData('dummy_vpixx', DUMMY_VPIXX)
        dp = _MockDPx() if DUMMY_VPIXX else _real_dp
        _vpx = {'closed': False, 'frames_left': 0, 'pixel_mode': False, 'vp': {}}
        dummySounds = {}

        # Pixel Mode reads the top-left pixel of the whole SCREEN. If the window is
        # not full screen (e.g. Builder's Pilot mode forces an 800x600 window), that
        # pixel belongs to the desktop and the trigger lines show garbage. Refuse to
        # run with real hardware unless the window is full screen in Run mode.
        if not DUMMY_VPIXX and (PILOTING or not win.fullscr):
            msg = ('VPixx Pixel Mode triggers need a FULL-SCREEN window in RUN mode '
                   '(PILOTING=%s, fullscr=%s). Switch Builder from Pilot to Run, or '
                   'tick dummy_vpixx to test without triggers.' % (PILOTING, win.fullscr))
            logging.error(msg)
            raise RuntimeError(msg)

        if DUMMY_VPIXX:
            # Testing without hardware: stereo PsychoPy sounds with the other ear
            # silent. Audible, but timing is not vsync-locked.
            from psychopy import sound as _sound
            _mono = toneWave.astype(np.float32) / 32767.0
            _zero = np.zeros_like(_mono)
            dummySounds['left'] = _sound.Sound(np.column_stack([_mono, _zero]),
                                               sampleRate=AUDIO_SAMPLE_RATE, stereo=True)
            dummySounds['right'] = _sound.Sound(np.column_stack([_zero, _mono]),
                                                sampleRate=AUDIO_SAMPLE_RATE, stereo=True)
        else:
            dp.DPxOpen()
            dp.DPxStopAllScheds()
            dp.DPxDisableDoutPixelMode()   # stays OFF through calibration/drift check
            dp.DPxInitAudCodec()
            dp.DPxSetAudLeftVolume(VPIXX_AUDIO_VOLUME)
            dp.DPxSetAudRightVolume(VPIXX_AUDIO_VOLUME)
            dp.DPxWriteRegCache()
            dp.DPxWriteAudioBuffer(toneWave, TONE_BUFFER_ADDR)
            dp.DPxWriteRegCache()
            logging.exp('VPixx audio ready: %d samples @ %d Hz (%.1f ms)'
                        % (toneSamples, AUDIO_SAMPLE_RATE,
                           1000.0 * toneSamples / AUDIO_SAMPLE_RATE))


        # ---------------- Pixel Mode B triggers ----------------
        def _set_patch(rgb):
            # rgb is an (R, G, B) tuple in 0-255; the patch is in 'rgb255' space
            trigger_patch.fillColor = rgb
            trigger_patch.lineColor = rgb


        def reset_trigger():
            # Force the pixel to black.
            _vpx['frames_left'] = 0
            _set_patch(TRIG_RESET)


        def pixel_mode_on():
            # Call in Begin Routine (before any flip of that routine). No-op if on.
            if _vpx['pixel_mode']:
                return
            reset_trigger()
            dp.DPxEnableDoutPixelModeB()   # blue-channel trigger output
            dp.DPxWriteRegCache()
            _vpx['pixel_mode'] = True
            logging.exp('VPixx Pixel Mode B ON')


        def pixel_mode_off():
            if not _vpx['pixel_mode']:
                return
            reset_trigger()
            dp.DPxDisableDoutPixelMode()
            dp.DPxWriteRegCache()
            _vpx['pixel_mode'] = False
            logging.exp('VPixx Pixel Mode B OFF')


        def _stamp_vp(label):
            # Runs right after the flip that carried the trigger: VPixx clock time.
            if DUMMY_VPIXX:
                return
            dp.DPxUpdateRegCache()
            t = dp.DPxGetTime()
            _vpx['vp'][label] = t
            thisExp.addData(label + '.vp', t)


        def send_trigger(rgb, label=None):
            # Put `rgb` on the trigger pixel for the NEXT flip, then auto-reset.
            # Call from Each Frame on the frame a stimulus starts
            # (frameNStart == frameN) so the trigger shares the stimulus flip.
            _set_patch(rgb)
            _vpx['frames_left'] = TRIG_HOLD_FRAMES
            if label:
                thisExp.addData(label + '.trigger', rgb[2])   # blue = trigger value
                win.callOnFlip(_stamp_vp, label)


        def tick_trigger():
            # Call FIRST in Each Frame: resets the pixel to black after the hold.
            if _vpx['frames_left'] > 0:
                _vpx['frames_left'] -= 1
                if _vpx['frames_left'] == 0:
                    _set_patch(TRIG_RESET)


        # ---------------- audio scheduler ----------------
        def prep_tone(side):
            """Load the schedule for this ear ('left'/'right'). Does NOT start it.
            Call in Begin Routine, well before the tone flip."""
            if DUMMY_VPIXX:
                return
            dp.DPxSetAudioSchedule(0.0, AUDIO_SAMPLE_RATE, toneSamples, side,
                                   TONE_BUFFER_ADDR)
            dp.DPxWriteRegCache()


        def arm_tone(side):
            """Call on the frame the tone should start, before that frame's flip,
            and AFTER any other VPixx register change on that frame. The start bit
            is pushed to the DATAPixx3 at the flip's vsync. Nothing may call
            DPxUpdateRegCache / DPxWriteRegCache between this and the flip."""
            if DUMMY_VPIXX:
                snd = dummySounds[side]
                snd.stop()
                win.callOnFlip(snd.play)
            else:
                dp.DPxStartAudSched()
                dp.DPxWriteRegCacheAfterVideoSync()


        def close_vpixx():
            # Stop audio, pixel mode off, disconnect (safe to call more than once).
            if _vpx['closed']:
                return
            _vpx['closed'] = True
            if DUMMY_VPIXX:
                return
            for fn in ('DPxStopAllScheds', 'DPxDisableDoutPixelMode',
                       'DPxWriteRegCache', 'DPxClose'):
                try:
                    getattr(dp, fn)()
                except Exception:
                    pass


        atexit.register(close_vpixx)   # also releases the device if the run aborts

        # ---- 1x1 px trigger patch, exact upper-left screen pixel ----
        _ww, _wh = win.size
        trigger_patch = visual.Rect(
            win, units='pix', width=1, height=1,
            pos=(-_ww / 2.0 + 0.5, _wh / 2.0 - 0.5),
            lineWidth=0, colorSpace='rgb255',
            fillColor=TRIG_RESET, lineColor=TRIG_RESET,
            interpolate=False, autoLog=False)
        trigger_patch.setAutoDraw(True)   # drawn (black) on every flip all session
      End Experiment:
        # black trigger pixel, pixel mode off, audio stopped, device closed
        reset_trigger()
        trigger_patch.setAutoDraw(False)
        close_vpixx()
    CodeComponent taskStartMsg
      Code Type = Py
      End Routine:
        # custom EDF message marking the start of the task (sent before the drift check)
        el_tracker = pylink.getEYELINK()
        el_tracker.sendMessage('TASK_START')
    TextComponent taskInstructions
      letterHeight = 36
      startVal [time (s)] = 0
      units = pix
      wrapWidth = 1500
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      text:
        Reaction time task

        Keep your eyes on the cross in the centre of the screen.

        On each trial you will hear a short tone in your LEFT or RIGHT ear.

        LEFT ear  ->  LEFT index finger
        RIGHT ear  ->  RIGHT index finger

        Respond as quickly and accurately as you can.

        First, look at the target dot so we can check the eye tracker.

        Press either button when ready.
    KeyboardComponent ready
      allowedKeys = "7","2","space"
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine eyelinkDriftCheck
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    DriftCheck DriftCheck plugin="psychopy-eyelink"
      backgroundColor = win.color
      driftCheckFilenames = 'qbeep.wav','type.wav','error.wav'
      driftCheckSounds = defaults
      foregroundColor = (1,1,1)
      screenUnitType = pix
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetFilename = images/fixTarget.bmp
      targetPosition = [0,0]
      targetSize = 24
      targetType = picture
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  Routine eyelinkStartRecording
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    HostDrawing HostDrawing plugin="psychopy-eyelink"
      componentsForDrawingToHostBackdrop = fixation
      recordStatusMessage = "Trial %d/%d" % (trials.thisN + 1, trials.nTotal)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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    StartRecording StartRecord plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (32, 32)
      startVal [time (s)] = ITI
      stopVal [duration (s)] = foreperiod + RESP_DEADLINE
      units = pix
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    KeyboardComponent resp
      allowedKeys = "7","2"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = ITI + foreperiod
      stopVal [duration (s)] = RESP_DEADLINE
      store = first key
      storeCorrect = True
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    CodeComponent trialCode
      Code Type = Py
      Before Experiment:
        # ---- timing (s) ----
        ITI = 0.5                        # blank screen before the fixation cross
        FOREPERIOD_MIN, FOREPERIOD_MAX = 0.8, 1.5
        RESP_DEADLINE = 1.5              # response window from tone onset
      Begin Experiment:
        # ---- trial-by-trial log: <data file name>_trials_log.tsv (in the session results folder) ----
        rtLogPath = thisExp.dataFileName + '_trials_log.tsv'
        rtLogCols = ['participant', 'session', 'date', 'edf_file', 'trial',
                     'eyelink_trialid', 'tone_side', 'corr_ans', 'foreperiod_s',
                     'fixation_onset_s', 'tone_onset_s', 'fixation_vp', 'tone_vp',
                     'resp_key', 'rt_s', 'correct', 'timeout', 'dummy_vpixx']
        os.makedirs(os.path.dirname(os.path.abspath(rtLogPath)), exist_ok=True)
        rtLogFile = open(rtLogPath, 'w', encoding='utf-8')
        rtLogFile.write('\t'.join(rtLogCols) + '\n')
        rtLogFile.flush()
      Begin Routine:
        pixel_mode_on()                  # first trial only (after the drift check)
        reset_trigger()
        _vpx['vp'].clear()
        el_tracker = pylink.getEYELINK()

        # jittered foreperiod (fixation -> tone), uniform 0.8-1.5 s
        foreperiod = FOREPERIOD_MIN + random() * (FOREPERIOD_MAX - FOREPERIOD_MIN)
        thisExp.addData('foreperiod', foreperiod)
        toneOnset = ITI + foreperiod     # same time resp starts
        trialEnd = toneOnset + RESP_DEADLINE
        prep_tone(toneSide)              # 'left' or 'right' from conditions.csv
        toneArmed = False
        toneStarted = None
      Each Frame:
        # This component sits AFTER fixation and resp, so on the frame a stimulus
        # starts (frameNStart == frameN) its trigger lands on the same flip.
        tick_trigger()                   # pixel back to black after the hold

        if fixation.status == STARTED and fixation.frameNStart == frameN:
            send_trigger(TRIG_FIXATION, 'fixation')

        # Same start test Builder uses for resp, so the tone, its trigger and the
        # response clock all start on the same flip (resp.rt = time from tone onset).
        if not toneArmed and tThisFlip >= toneOnset - frameTolerance:
            win.callOnFlip(el_tracker.sendMessage, 'TONE_ONSET_%s' % toneSide.upper())
            send_trigger(TRIG_TONE_L if toneSide == 'left' else TRIG_TONE_R, 'tone')
            arm_tone(toneSide)           # LAST VPixx call before this flip
            toneArmed = True
            toneStarted = tThisFlipGlobal
            thisExp.addData('tone.started', toneStarted)   # PsychoPy time of the tone flip

        if tThisFlip >= trialEnd - frameTolerance:
            continueRoutine = False
      End Experiment:
        rtLogFile.close()
      End Routine:
        reset_trigger()

        # behavioural summary in the PsychoPy data file
        if resp.keys in ('', [], None):
            respKey, respRT, respCorr, timeout = 'None', -1, 0, 1
        else:
            respKey, respRT, respCorr, timeout = resp.keys, resp.rt, resp.corr, 0
        thisExp.addData('timeout', timeout)

        # custom EDF messages (MarkEvents also logs resp RT/keys/corr as TRIAL_VARs)
        el_tracker.sendMessage('TRIAL_SUMMARY trial=%d side=%s key=%s rt=%.4f corr=%d timeout=%d'
                               % (trials.thisN + 1, toneSide, respKey, respRT, respCorr, timeout))
        el_tracker.sendMessage('!V TRIAL_VAR timeout %d' % timeout)

        # one row in the trial log (flushed every trial so an aborted run keeps its rows)
        def _fmt(x, nd=4):
            return 'NA' if x is None else ('%.*f' % (nd, x) if isinstance(x, float) else str(x))
        rtLogRow = [expInfo['participant'], expInfo['session'], expInfo['date'],
                    session_identifier + '.EDF', trials.thisN + 1, trial_index, toneSide, corrAns,
                    foreperiod, fixation.tStartRefresh, toneStarted,
                    _vpx['vp'].get('fixation'), _vpx['vp'].get('tone'),
                    respKey if not timeout else 'NA', respRT if not timeout else 'NA',
                    respCorr, timeout, int(DUMMY_VPIXX)]
        rtLogFile.write('\t'.join(_fmt(v) for v in rtLogRow) + '\n')
        rtLogFile.flush()
    MarkEvents MarkEvents plugin="psychopy-eyelink"
      componentsForEyeLinkRespEventMessages = resp
      componentsForEyeLinkStimEventMessages = fixation
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = True
      interestAreaMargins = 20
      interestAreaShape = Ellipse
      sendTrialOnsetOffsetMessages = False
      sendVideoFrameMessages = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      trialConditionVariablesForEyeLinkLogging = toneSide,corrAns,foreperiod
      useQuitKeys = True
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  Routine eyelinkStopRecording
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    StopRecording StopRecord plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine thanks
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    CodeComponent taskEndMsg
      Code Type = Py
      Begin Routine:
        pixel_mode_off()                 # trigger lines idle from here on
        el_tracker = pylink.getEYELINK()
        el_tracker.sendMessage('TASK_END')
    TextComponent endScreen
      letterHeight = 36
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      units = pix
      wrapWidth = 1500
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      text:
        All done - thank you!

        Please stay still while we save the data.
Flow
  Routine eyelinkSetup
  Routine instruct
  Routine eyelinkDriftCheck
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 20
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    conditions:
      [OrderedDict([('toneSide', 'left'), ('corrAns', '7')]),
      OrderedDict([('toneSide', 'right'), ('corrAns', '2')])]
    Routine eyelinkStartRecording
    Routine trial
    Routine eyelinkStopRecording
  LoopTerminator trials
  Routine thanks
