PsychoPy2experiment version="2026.2.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['participant'], expInfo['session'], expInfo['date'])
  Experiment info = {'participant': '', 'session': '001', 'dummy_vpixx': False}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  color = [-1, -1, -1]
  expName = ChoiceRT_VPixxAudio
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine instruct
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    CodeComponent vpixxAudio
      Code Type = Py
      Before Experiment:
        # =====================================================================
        # VPixx DATAPixx3 audio (MEG lab) -- adapted from the oddball script
        # ---------------------------------------------------------------------
        # One tone is generated here, written once into DATAPixx3 RAM, and
        # replayed every trial by the audio scheduler. lrMode 'left' / 'right'
        # sends the (mono) buffer to that ear only. Playback is armed just
        # before a flip and pushed to the device at that flip's vsync, so the
        # tone starts on the same frame as Builder's response keyboard.
        # No Pixel Mode and no MEG triggers in this experiment.
        # =====================================================================
        import atexit
        import numpy as np

        # ---- tone ----
        TONE_FREQ         = 1000      # Hz
        TONE_DURATION     = 0.100     # s
        RAMP_DURATION     = 0.010     # s, cosine on/off ramps (no clicks)
        AUDIO_SAMPLE_RATE = 48000     # Hz, DATAPixx3 audio codec
        AUDIO_AMPLITUDE   = 0.8       # 0-1, scaled to int16
        TONE_BUFFER_ADDR  = int(16e6) # DATAPixx3 RAM address (VPixx default)
        VPIXX_AUDIO_VOLUME = 0.5      # codec volume 0-1 (codec opens at 0 = silent!)

        try:
            from pypixxlib import _libdpx as _real_dp
            HAS_PYPIXXLIB = True
        except ImportError:
            _real_dp = None
            HAS_PYPIXXLIB = False


        def make_tone_int16(freq, dur, rate, ramp, amp):
            n = int(round(dur * rate))
            n_ramp = int(round(ramp * rate))
            t = np.arange(n) / rate
            tone = np.sin(2.0 * np.pi * freq * t)
            up = 0.5 * (1.0 - np.cos(np.pi * np.arange(n_ramp) / n_ramp))
            tone[:n_ramp] *= up
            tone[-n_ramp:] *= up[::-1]
            return (np.clip(tone * amp, -1.0, 1.0) * 32767.0).astype(np.int16)


        toneWave = make_tone_int16(TONE_FREQ, TONE_DURATION, AUDIO_SAMPLE_RATE,
                                   RAMP_DURATION, AUDIO_AMPLITUDE)
        toneSamples = int(len(toneWave))
      Begin Experiment:
        # Defined here (inside Builder's run()) because these helpers need win,
        # thisExp and dp, which only exist inside run().
        DUMMY_VPIXX = bool(expInfo['dummy_vpixx'])
        if not HAS_PYPIXXLIB and not DUMMY_VPIXX:
            logging.warning('pypixxlib not installed -> DUMMY_VPIXX forced on '
                            '(PsychoPy sound, NOT vsync-locked)')
            DUMMY_VPIXX = True
        thisExp.addData('dummy_vpixx', DUMMY_VPIXX)

        dp = None if DUMMY_VPIXX else _real_dp
        dummySounds = {}

        if DUMMY_VPIXX:
            # Fallback for testing without hardware: stereo PsychoPy sounds with
            # the other ear silent. Audible, but timing is not vsync-locked.
            from psychopy import sound as _sound
            _mono = toneWave.astype(np.float32) / 32767.0
            _zero = np.zeros_like(_mono)
            dummySounds['left'] = _sound.Sound(np.column_stack([_mono, _zero]),
                                               sampleRate=AUDIO_SAMPLE_RATE, stereo=True)
            dummySounds['right'] = _sound.Sound(np.column_stack([_zero, _mono]),
                                                sampleRate=AUDIO_SAMPLE_RATE, stereo=True)
        else:
            dp.DPxOpen()
            dp.DPxStopAllScheds()
            dp.DPxInitAudCodec()
            dp.DPxSetAudLeftVolume(VPIXX_AUDIO_VOLUME)
            dp.DPxSetAudRightVolume(VPIXX_AUDIO_VOLUME)
            dp.DPxWriteRegCache()
            dp.DPxWriteAudioBuffer(toneWave, TONE_BUFFER_ADDR)
            dp.DPxWriteRegCache()
            logging.exp('VPixx audio ready: %d samples @ %d Hz (%.1f ms)'
                        % (toneSamples, AUDIO_SAMPLE_RATE,
                           1000.0 * toneSamples / AUDIO_SAMPLE_RATE))


        def prep_tone(side):
            """Load the schedule for this ear. Does NOT start it.
            Call in Begin Routine, well before the tone flip."""
            if DUMMY_VPIXX:
                return
            dp.DPxSetAudioSchedule(0.0, AUDIO_SAMPLE_RATE, toneSamples, side,
                                   TONE_BUFFER_ADDR)
            dp.DPxWriteRegCache()


        def _stamp_tone():
            # Runs right after the tone flip: DATAPixx3 clock at that vsync.
            if DUMMY_VPIXX:
                return
            dp.DPxUpdateRegCache()
            thisExp.addData('tone.vp', dp.DPxGetTime())


        def arm_tone(side):
            """Call on the frame the tone should start, before that frame's flip.
            The start bit is pushed to the DATAPixx3 at the flip's vsync.
            Nothing may call DPxUpdateRegCache between this and the flip."""
            if DUMMY_VPIXX:
                snd = dummySounds[side]
                snd.stop()
                win.callOnFlip(snd.play)
            else:
                dp.DPxStartAudSched()
                dp.DPxWriteRegCacheAfterVideoSync()
            win.callOnFlip(_stamp_tone)


        _vpixx_closed = [False]


        def close_vpixx():
            if DUMMY_VPIXX or _vpixx_closed[0]:
                return
            _vpixx_closed[0] = True
            for f in (dp.DPxStopAllScheds, dp.DPxWriteRegCache, dp.DPxClose):
                try:
                    f()
                except Exception:
                    pass


        atexit.register(close_vpixx)   # also releases the device after Esc
      End Experiment:
        close_vpixx()
    TextComponent taskInstructions
      letterHeight = 32
      startVal [time (s)] = 0.0
      units = pix
      wrapWidth = 1400
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      text:
        On each trial you will hear a short tone in your LEFT or RIGHT ear.

        Tone in the LEFT ear: press with your LEFT index finger.
        Tone in the RIGHT ear: press with your RIGHT index finger.

        Respond as quickly and accurately as you can, and keep your eyes on the cross.

        Press either button to start.
    KeyboardComponent ready
      allowedKeys = '7', '2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (32, 32)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent resp
      allowedKeys = '7', '2'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = ITI + foreperiod
      stopVal [duration (s)] = RESP_DEADLINE
      store = first key
      storeCorrect = True
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    CodeComponent trialCode
      Code Type = Py
      Before Experiment:
        # ---- timing (s) ----
        ITI = 0.5                        # fixed part of the pre-tone period
        FOREPERIOD_MIN, FOREPERIOD_MAX = 0.8, 1.5
        RESP_DEADLINE = 1.5              # response window from tone onset
      Begin Routine:
        foreperiod = FOREPERIOD_MIN + random() * (FOREPERIOD_MAX - FOREPERIOD_MIN)
        toneOnset = ITI + foreperiod
        thisExp.addData('foreperiod', foreperiod)
        prep_tone(toneSide)              # 'left' or 'right' from conditions.csv
        toneArmed = False
        # routine ends on a response, or RESP_DEADLINE after the tone
        trialEnd = toneOnset + RESP_DEADLINE
      Each Frame:
        # Same start test Builder uses for resp, so the tone starts on the
        # flip where the response clock starts (RT = time from tone onset).
        if not toneArmed and tThisFlip >= toneOnset - frameTolerance:
            arm_tone(toneSide)
            toneArmed = True
            thisExp.addData('tone.started', tThisFlipGlobal)   # PsychoPy time of the tone flip
        if tThisFlip >= trialEnd - frameTolerance:
            continueRoutine = False
      End Routine:
        timeout = int(resp.keys in ('', [], None))
        thisExp.addData('timeout', timeout)
  Routine thanks
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    TextComponent thanksText
      letterHeight = 32
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = pix
      wrapWidth = 1400
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      text:
        Thank you!

        The task is complete.
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 20
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    conditions:
      [OrderedDict({'toneSide': 'left', 'corrAns': np.int64(7)}),
      OrderedDict({'toneSide': 'right', 'corrAns': np.int64(2)})]
    Routine trial
  LoopTerminator trials
  Routine thanks
